PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['vid/Woodpolishing.mp4', 'vid/WoodchoppingSnow.mp4', 'vid/WoodchoppingDog.mp4', 'vid/WomanCooking.mp4', 'vid/WindowCleanersCostumes.mp4', 'vid/WindowCleaner.mp4', 'vid/WhaleWatching.mp4', 'vid/Weightlifing.mp4', 'vid/WashingFace.mp4', 'vid/WashingDishes.mp4', 'vid/WashingBedsheets.mp4', 'vid/WalkingDog.mp4', 'vid/Vaccum.mp4', 'vid/Tennis.mp4', 'vid/Spinning.mp4', 'vid/SnowShovelling.mp4', 'vid/ShoeCleaning.mp4', 'vid/ShoeCleaningII.mp4', 'vid/RockClimbing.mp4', 'vid/RockClimbingII.mp4', 'vid/PoolJumpingOutdoors.mp4', 'vid/PoolJumping.mp4', 'vid/Pipes.mp4', 'vid/PianoYanni.mp4', 'vid/PianoRecital.mp4', 'vid/Nails.mp4', 'vid/Motorbikes.mp4', 'vid/ManBikeRiding.mp4', 'vid/MakeupArtist.mp4', 'vid/MakeupArtistGirl.mp4', 'vid/KidswithDad.mp4', 'vid/Interview.mp4', 'vid/HorseTrail.mp4', 'vid/HorseRiding.mp4', 'vid/HighJump.mp4', 'vid/HarmonicaStanding.mp4', 'vid/Harmonica.mp4', 'vid/HairStyling.mp4', 'vid/Hairrollers.mp4', 'vid/HairMannequin.mp4', 'vid/HairdresserDonation.mp4', 'vid/GymnasticsChina.mp4', 'vid/GuySmoking.mp4', 'vid/GrassTrimming.mp4', 'vid/GrassTrimmingII.mp4', 'vid/GrandmaJumping.mp4', 'vid/GiftWrapping.mp4', 'vid/DrivingCar.mp4', 'vid/DogWalking.mp4', 'vid/DiscusThrow.mp4', 'vid/DancingGuy.mp4', 'vid/DancingGirl.mp4', 'vid/CookingShow.mp4', 'vid/CookingShowII.mp4', 'vid/CookingPumpkin.mp4', 'vid/CookingMan.mp4', 'vid/CookingDadDaughter.mp4', 'vid/CityWalking.mp4', 'vid/ChildHockey.mp4', 'vid/CarDriving.mp4', 'vid/Canoe.mp4', 'vid/Boysplaying.mp4', 'vid/Bicycle.mp4', 'vid/BicycleBoy.mp4', 'vid/Beard.mp4', 'vid/Basketball.mp4', 'vid/Ballett.mp4', 'vid/Ballerina.mp4', 'vid/Backflips.mp4', 'vid/BabyTree.mp4', 'vid/BabyTeeth.mp4', 'vid/BabyCooking.mp4', 'img/Sp126.png', 'img/Sp125.png', 'img/Sp075.png', 'img/Sp051.png', 'img/Sp020.png', 'img/Sp009.png', 'img/Sn079.png', 'img/P122.png', 'img/P114.png', 'img/P113.png', 'img/P101.png', 'img/P099.png', 'img/P096.png', 'img/P095.png', 'img/P083.png', 'img/P082.png', 'img/P081.png', 'img/P080.png', 'img/P079.png', 'img/P078.png', 'img/P077.png', 'img/P075.png', 'img/P073.png', 'img/P066.png', 'img/P060.png', 'img/OASIS_I282.png', 'img/OASIS_I281.png', 'img/OASIS_I274.png', 'img/OASIS_I273.png', 'img/OASIS_I256.png', 'img/OASIS_I254.png', 'img/OASIS_I252.png', 'img/OASIS_I24.png', 'img/OASIS_I22.png', 'img/OASIS_I167.png', 'img/OASIS_I166.png', 'img/OASIS_I134.png', 'img/OASIS_I133.png', 'img/I169.png', 'img/I132.png', 'img/A127.png', 'img/A123.png', 'img/A115.png', 'img/A062.png', 'img/A042.png', 'img/A040.png', 'img/A038.png', 'img/A011.png', 'img/N102.png', 'img/N092.png', 'img/N091.png', 'img/N082.png', 'img/N081.png', 'img/N070.png', 'img/N067.png', 'img/N061.png', 'img/N047.png', 'img/N040.png', 'img/N036.png', 'img/N031.png', 'img/N028.png', 'img/N026.png', 'img/N024.png', 'img/N020.png', 'img/N017.png', 'img/N014.png', 'img/N011.png', 'img/N010.png', 'img/N009.png', 'img/N006.png', 'img/N004.png', 'img/N003.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = btrz1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine pre
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        function shuffle(array) {
          for (let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1)); // 0 ≤ j ≤ i
            [array[i], array[j]] = [array[j], array[i]];   // swap
          }
          return array;
        }
        negative_pictures = ["img/A011.png", "img/A038.png", "img/A040.png", "img/A042.png", "img/A062.png", "img/A115.png", "img/A123.png", "img/A127.png", "img/I169.png", "img/OASIS_I166.png", "img/OASIS_I167.png", "img/OASIS_I22.png", "img/OASIS_I24.png", "img/OASIS_I273.png", "img/OASIS_I274.png", "img/OASIS_I281.png", "img/OASIS_I282.png", "img/Sn079.png", "img/Sp009.png", "img/Sp020.png", "img/Sp051.png", "img/Sp075.png", "img/Sp125.png", "img/Sp126.png"]
        neutral_pictures = ["img/N003.png", "img/N004.png", "img/N006.png", "img/N009.png", "img/N010.png", "img/N011.png", "img/N014.png", "img/N017.png", "img/N020.png", "img/N024.png", "img/N026.png", "img/N028.png", "img/N031.png", "img/N036.png", "img/N040.png", "img/N047.png", "img/N061.png", "img/N067.png", "img/N070.png", "img/N081.png", "img/N082.png", "img/N091.png", "img/N092.png", "img/N102.png"]
        positive_pictures = ["img/I132.png", "img/OASIS_I133.png", "img/OASIS_I134.png", "img/OASIS_I252.png", "img/OASIS_I254.png", "img/OASIS_I256.png", "img/P060.png", "img/P066.png", "img/P073.png", "img/P075.png", "img/P077.png", "img/P078.png", "img/P079.png", "img/P080.png", "img/P081.png", "img/P082.png", "img/P083.png", "img/P095.png", "img/P096.png", "img/P099.png", "img/P101.png", "img/P113.png", "img/P114.png", "img/P122.png"]
        video_filenames = ["vid/BabyCooking.mp4", "vid/BabyTeeth.mp4", "vid/BabyTree.mp4", "vid/Backflips.mp4", "vid/Ballerina.mp4", "vid/Ballett.mp4", "vid/Basketball.mp4", "vid/Beard.mp4", "vid/Bicycle.mp4", "vid/BicycleBoy.mp4", "vid/Boysplaying.mp4", "vid/Canoe.mp4", "vid/CarDriving.mp4", "vid/ChildHockey.mp4", "vid/CityWalking.mp4", "vid/CookingDadDaughter.mp4", "vid/CookingMan.mp4", "vid/CookingPumpkin.mp4", "vid/CookingShow.mp4", "vid/CookingShowII.mp4", "vid/DancingGirl.mp4", "vid/DancingGuy.mp4", "vid/DiscusThrow.mp4", "vid/DogWalking.mp4", "vid/DrivingCar.mp4", "vid/GiftWrapping.mp4", "vid/GrandmaJumping.mp4", "vid/GrassTrimming.mp4", "vid/GrassTrimmingII.mp4", "vid/GuySmoking.mp4", "vid/GymnasticsChina.mp4", "vid/HairMannequin.mp4", "vid/HairStyling.mp4", "vid/HairdresserDonation.mp4", "vid/Hairrollers.mp4", "vid/Harmonica.mp4", "vid/HarmonicaStanding.mp4", "vid/HighJump.mp4", "vid/HorseRiding.mp4", "vid/HorseTrail.mp4", "vid/Interview.mp4", "vid/KidswithDad.mp4", "vid/MakeupArtist.mp4", "vid/MakeupArtistGirl.mp4", "vid/ManBikeRiding.mp4", "vid/Motorbikes.mp4", "vid/Nails.mp4", "vid/PianoRecital.mp4", "vid/PianoYanni.mp4", "vid/Pipes.mp4", "vid/PoolJumping.mp4", "vid/PoolJumpingOutdoors.mp4", "vid/RockClimbing.mp4", "vid/RockClimbingII.mp4", "vid/ShoeCleaning.mp4", "vid/ShoeCleaningII.mp4", "vid/SnowShovelling.mp4", "vid/Spinning.mp4", "vid/Tennis.mp4", "vid/Vaccum.mp4", "vid/WalkingDog.mp4", "vid/WashingBedsheets.mp4", "vid/WashingDishes.mp4", "vid/WashingFace.mp4", "vid/Weightlifing.mp4", "vid/WhaleWatching.mp4", "vid/WindowCleaner.mp4", "vid/WindowCleanersCostumes.mp4", "vid/WomanCooking.mp4", "vid/WoodchoppingDog.mp4", "vid/WoodchoppingSnow.mp4", "vid/Woodpolishing.mp4"]
        shuffle(negative_pictures);
        shuffle(neutral_pictures);
        shuffle(positive_pictures);
        shuffle(video_filenames);
        video_set_a = video_filenames.slice(0, 24);
        video_set_b = video_filenames.slice(24, 48);
        video_set_c = video_filenames.slice(48, 72);
        trial_list_mapping_1 = [{"vid": video_set_a[0], "img": negative_pictures[0], "valence": "negative", "n": 1, "list": 1}, {"vid": video_set_a[1], "img": negative_pictures[1], "valence": "negative", "n": 2, "list": 1}, {"vid": video_set_a[2], "img": negative_pictures[2], "valence": "negative", "n": 3, "list": 1}, {"vid": video_set_a[3], "img": negative_pictures[3], "valence": "negative", "n": 4, "list": 1}, {"vid": video_set_a[4], "img": negative_pictures[4], "valence": "negative", "n": 5, "list": 1}, {"vid": video_set_a[5], "img": negative_pictures[5], "valence": "negative", "n": 6, "list": 1}, {"vid": video_set_a[6], "img": negative_pictures[6], "valence": "negative", "n": 7, "list": 1}, {"vid": video_set_a[7], "img": negative_pictures[7], "valence": "negative", "n": 8, "list": 1}, {"vid": video_set_a[8], "img": negative_pictures[8], "valence": "negative", "n": 9, "list": 1}, {"vid": video_set_a[9], "img": negative_pictures[9], "valence": "negative", "n": 10, "list": 1}, {"vid": video_set_a[10], "img": negative_pictures[10], "valence": "negative", "n": 11, "list": 1}, {"vid": video_set_a[11], "img": negative_pictures[11], "valence": "negative", "n": 12, "list": 1}, {"vid": video_set_a[12], "img": negative_pictures[12], "valence": "negative", "n": 13, "list": 1}, {"vid": video_set_a[13], "img": negative_pictures[13], "valence": "negative", "n": 14, "list": 1}, {"vid": video_set_a[14], "img": negative_pictures[14], "valence": "negative", "n": 15, "list": 1}, {"vid": video_set_a[15], "img": negative_pictures[15], "valence": "negative", "n": 16, "list": 1}, {"vid": video_set_a[16], "img": negative_pictures[16], "valence": "negative", "n": 17, "list": 1}, {"vid": video_set_a[17], "img": negative_pictures[17], "valence": "negative", "n": 18, "list": 1}, {"vid": video_set_a[18], "img": negative_pictures[18], "valence": "negative", "n": 19, "list": 1}, {"vid": video_set_a[19], "img": negative_pictures[19], "valence": "negative", "n": 20, "list": 1}, {"vid": video_set_a[20], "img": negative_pictures[20], "valence": "negative", "n": 21, "list": 1}, {"vid": video_set_a[21], "img": negative_pictures[21], "valence": "negative", "n": 22, "list": 1}, {"vid": video_set_a[22], "img": negative_pictures[22], "valence": "negative", "n": 23, "list": 1}, {"vid": video_set_a[23], "img": negative_pictures[23], "valence": "negative", "n": 24, "list": 1}, {"vid": video_set_b[0], "img": neutral_pictures[0], "valence": "neutral", "n": 25, "list": 1}, {"vid": video_set_b[1], "img": neutral_pictures[1], "valence": "neutral", "n": 26, "list": 1}, {"vid": video_set_b[2], "img": neutral_pictures[2], "valence": "neutral", "n": 27, "list": 1}, {"vid": video_set_b[3], "img": neutral_pictures[3], "valence": "neutral", "n": 28, "list": 1}, {"vid": video_set_b[4], "img": neutral_pictures[4], "valence": "neutral", "n": 29, "list": 1}, {"vid": video_set_b[5], "img": neutral_pictures[5], "valence": "neutral", "n": 30, "list": 1}, {"vid": video_set_b[6], "img": neutral_pictures[6], "valence": "neutral", "n": 31, "list": 1}, {"vid": video_set_b[7], "img": neutral_pictures[7], "valence": "neutral", "n": 32, "list": 1}, {"vid": video_set_b[8], "img": neutral_pictures[8], "valence": "neutral", "n": 33, "list": 1}, {"vid": video_set_b[9], "img": neutral_pictures[9], "valence": "neutral", "n": 34, "list": 1}, {"vid": video_set_b[10], "img": neutral_pictures[10], "valence": "neutral", "n": 35, "list": 1}, {"vid": video_set_b[11], "img": neutral_pictures[11], "valence": "neutral", "n": 36, "list": 1}, {"vid": video_set_b[12], "img": neutral_pictures[12], "valence": "neutral", "n": 37, "list": 1}, {"vid": video_set_b[13], "img": neutral_pictures[13], "valence": "neutral", "n": 38, "list": 1}, {"vid": video_set_b[14], "img": neutral_pictures[14], "valence": "neutral", "n": 39, "list": 1}, {"vid": video_set_b[15], "img": neutral_pictures[15], "valence": "neutral", "n": 40, "list": 1}, {"vid": video_set_b[16], "img": neutral_pictures[16], "valence": "neutral", "n": 41, "list": 1}, {"vid": video_set_b[17], "img": neutral_pictures[17], "valence": "neutral", "n": 42, "list": 1}, {"vid": video_set_b[18], "img": neutral_pictures[18], "valence": "neutral", "n": 43, "list": 1}, {"vid": video_set_b[19], "img": neutral_pictures[19], "valence": "neutral", "n": 44, "list": 1}, {"vid": video_set_b[20], "img": neutral_pictures[20], "valence": "neutral", "n": 45, "list": 1}, {"vid": video_set_b[21], "img": neutral_pictures[21], "valence": "neutral", "n": 46, "list": 1}, {"vid": video_set_b[22], "img": neutral_pictures[22], "valence": "neutral", "n": 47, "list": 1}, {"vid": video_set_b[23], "img": neutral_pictures[23], "valence": "neutral", "n": 48, "list": 1}, {"vid": video_set_c[0], "img": positive_pictures[0], "valence": "positive", "n": 49, "list": 1}, {"vid": video_set_c[1], "img": positive_pictures[1], "valence": "positive", "n": 50, "list": 1}, {"vid": video_set_c[2], "img": positive_pictures[2], "valence": "positive", "n": 51, "list": 1}, {"vid": video_set_c[3], "img": positive_pictures[3], "valence": "positive", "n": 52, "list": 1}, {"vid": video_set_c[4], "img": positive_pictures[4], "valence": "positive", "n": 53, "list": 1}, {"vid": video_set_c[5], "img": positive_pictures[5], "valence": "positive", "n": 54, "list": 1}, {"vid": video_set_c[6], "img": positive_pictures[6], "valence": "positive", "n": 55, "list": 1}, {"vid": video_set_c[7], "img": positive_pictures[7], "valence": "positive", "n": 56, "list": 1}, {"vid": video_set_c[8], "img": positive_pictures[8], "valence": "positive", "n": 57, "list": 1}, {"vid": video_set_c[9], "img": positive_pictures[9], "valence": "positive", "n": 58, "list": 1}, {"vid": video_set_c[10], "img": positive_pictures[10], "valence": "positive", "n": 59, "list": 1}, {"vid": video_set_c[11], "img": positive_pictures[11], "valence": "positive", "n": 60, "list": 1}, {"vid": video_set_c[12], "img": positive_pictures[12], "valence": "positive", "n": 61, "list": 1}, {"vid": video_set_c[13], "img": positive_pictures[13], "valence": "positive", "n": 62, "list": 1}, {"vid": video_set_c[14], "img": positive_pictures[14], "valence": "positive", "n": 63, "list": 1}, {"vid": video_set_c[15], "img": positive_pictures[15], "valence": "positive", "n": 64, "list": 1}, {"vid": video_set_c[16], "img": positive_pictures[16], "valence": "positive", "n": 65, "list": 1}, {"vid": video_set_c[17], "img": positive_pictures[17], "valence": "positive", "n": 66, "list": 1}, {"vid": video_set_c[18], "img": positive_pictures[18], "valence": "positive", "n": 67, "list": 1}, {"vid": video_set_c[19], "img": positive_pictures[19], "valence": "positive", "n": 68, "list": 1}, {"vid": video_set_c[20], "img": positive_pictures[20], "valence": "positive", "n": 69, "list": 1}, {"vid": video_set_c[21], "img": positive_pictures[21], "valence": "positive", "n": 70, "list": 1}, {"vid": video_set_c[22], "img": positive_pictures[22], "valence": "positive", "n": 71, "list": 1}, {"vid": video_set_c[23], "img": positive_pictures[23], "valence": "positive", "n": 72, "list": 1}];
        trial_list_mapping_1_block_1 = [{"vid": video_set_a[0], "img": negative_pictures[0], "valence": "negative", "n": 1, "list": 1}, {"vid": video_set_a[1], "img": negative_pictures[1], "valence": "negative", "n": 2, "list": 1}, {"vid": video_set_a[2], "img": negative_pictures[2], "valence": "negative", "n": 3, "list": 1}, {"vid": video_set_a[3], "img": negative_pictures[3], "valence": "negative", "n": 4, "list": 1}, {"vid": video_set_a[4], "img": negative_pictures[4], "valence": "negative", "n": 5, "list": 1}, {"vid": video_set_a[5], "img": negative_pictures[5], "valence": "negative", "n": 6, "list": 1}, {"vid": video_set_a[6], "img": negative_pictures[6], "valence": "negative", "n": 7, "list": 1}, {"vid": video_set_a[7], "img": negative_pictures[7], "valence": "negative", "n": 8, "list": 1}, {"vid": video_set_b[0], "img": neutral_pictures[0], "valence": "neutral", "n": 25, "list": 1}, {"vid": video_set_b[1], "img": neutral_pictures[1], "valence": "neutral", "n": 26, "list": 1}, {"vid": video_set_b[2], "img": neutral_pictures[2], "valence": "neutral", "n": 27, "list": 1}, {"vid": video_set_b[3], "img": neutral_pictures[3], "valence": "neutral", "n": 28, "list": 1}, {"vid": video_set_b[4], "img": neutral_pictures[4], "valence": "neutral", "n": 29, "list": 1}, {"vid": video_set_b[5], "img": neutral_pictures[5], "valence": "neutral", "n": 30, "list": 1}, {"vid": video_set_b[6], "img": neutral_pictures[6], "valence": "neutral", "n": 31, "list": 1}, {"vid": video_set_b[7], "img": neutral_pictures[7], "valence": "neutral", "n": 32, "list": 1}, {"vid": video_set_c[0], "img": positive_pictures[0], "valence": "positive", "n": 49, "list": 1}, {"vid": video_set_c[1], "img": positive_pictures[1], "valence": "positive", "n": 50, "list": 1}, {"vid": video_set_c[2], "img": positive_pictures[2], "valence": "positive", "n": 51, "list": 1}, {"vid": video_set_c[3], "img": positive_pictures[3], "valence": "positive", "n": 52, "list": 1}, {"vid": video_set_c[4], "img": positive_pictures[4], "valence": "positive", "n": 53, "list": 1}, {"vid": video_set_c[5], "img": positive_pictures[5], "valence": "positive", "n": 54, "list": 1}, {"vid": video_set_c[6], "img": positive_pictures[6], "valence": "positive", "n": 55, "list": 1}, {"vid": video_set_c[7], "img": positive_pictures[7], "valence": "positive", "n": 56, "list": 1}];
        trial_list_mapping_1_block_2 = [{"vid": video_set_a[8], "img": negative_pictures[8], "valence": "negative", "n": 9, "list": 1}, {"vid": video_set_a[9], "img": negative_pictures[9], "valence": "negative", "n": 10, "list": 1}, {"vid": video_set_a[10], "img": negative_pictures[10], "valence": "negative", "n": 11, "list": 1}, {"vid": video_set_a[11], "img": negative_pictures[11], "valence": "negative", "n": 12, "list": 1}, {"vid": video_set_a[12], "img": negative_pictures[12], "valence": "negative", "n": 13, "list": 1}, {"vid": video_set_a[13], "img": negative_pictures[13], "valence": "negative", "n": 14, "list": 1}, {"vid": video_set_a[14], "img": negative_pictures[14], "valence": "negative", "n": 15, "list": 1}, {"vid": video_set_a[15], "img": negative_pictures[15], "valence": "negative", "n": 16, "list": 1}, {"vid": video_set_b[8], "img": neutral_pictures[8], "valence": "neutral", "n": 33, "list": 1}, {"vid": video_set_b[9], "img": neutral_pictures[9], "valence": "neutral", "n": 34, "list": 1}, {"vid": video_set_b[10], "img": neutral_pictures[10], "valence": "neutral", "n": 35, "list": 1}, {"vid": video_set_b[11], "img": neutral_pictures[11], "valence": "neutral", "n": 36, "list": 1}, {"vid": video_set_b[12], "img": neutral_pictures[12], "valence": "neutral", "n": 37, "list": 1}, {"vid": video_set_b[13], "img": neutral_pictures[13], "valence": "neutral", "n": 38, "list": 1}, {"vid": video_set_b[14], "img": neutral_pictures[14], "valence": "neutral", "n": 39, "list": 1}, {"vid": video_set_b[15], "img": neutral_pictures[15], "valence": "neutral", "n": 40, "list": 1}, {"vid": video_set_c[8], "img": positive_pictures[8], "valence": "positive", "n": 57, "list": 1}, {"vid": video_set_c[9], "img": positive_pictures[9], "valence": "positive", "n": 58, "list": 1}, {"vid": video_set_c[10], "img": positive_pictures[10], "valence": "positive", "n": 59, "list": 1}, {"vid": video_set_c[11], "img": positive_pictures[11], "valence": "positive", "n": 60, "list": 1}, {"vid": video_set_c[12], "img": positive_pictures[12], "valence": "positive", "n": 61, "list": 1}, {"vid": video_set_c[13], "img": positive_pictures[13], "valence": "positive", "n": 62, "list": 1}, {"vid": video_set_c[14], "img": positive_pictures[14], "valence": "positive", "n": 63, "list": 1}, {"vid": video_set_c[15], "img": positive_pictures[15], "valence": "positive", "n": 64, "list": 1}];
        trial_list_mapping_1_block_3 = [{"vid": video_set_a[16], "img": negative_pictures[16], "valence": "negative", "n": 17, "list": 1}, {"vid": video_set_a[17], "img": negative_pictures[17], "valence": "negative", "n": 18, "list": 1}, {"vid": video_set_a[18], "img": negative_pictures[18], "valence": "negative", "n": 19, "list": 1}, {"vid": video_set_a[19], "img": negative_pictures[19], "valence": "negative", "n": 20, "list": 1}, {"vid": video_set_a[20], "img": negative_pictures[20], "valence": "negative", "n": 21, "list": 1}, {"vid": video_set_a[21], "img": negative_pictures[21], "valence": "negative", "n": 22, "list": 1}, {"vid": video_set_a[22], "img": negative_pictures[22], "valence": "negative", "n": 23, "list": 1}, {"vid": video_set_a[23], "img": negative_pictures[23], "valence": "negative", "n": 24, "list": 1}, {"vid": video_set_b[16], "img": neutral_pictures[16], "valence": "neutral", "n": 41, "list": 1}, {"vid": video_set_b[17], "img": neutral_pictures[17], "valence": "neutral", "n": 42, "list": 1}, {"vid": video_set_b[18], "img": neutral_pictures[18], "valence": "neutral", "n": 43, "list": 1}, {"vid": video_set_b[19], "img": neutral_pictures[19], "valence": "neutral", "n": 44, "list": 1}, {"vid": video_set_b[20], "img": neutral_pictures[20], "valence": "neutral", "n": 45, "list": 1}, {"vid": video_set_b[21], "img": neutral_pictures[21], "valence": "neutral", "n": 46, "list": 1}, {"vid": video_set_b[22], "img": neutral_pictures[22], "valence": "neutral", "n": 47, "list": 1}, {"vid": video_set_b[23], "img": neutral_pictures[23], "valence": "neutral", "n": 48, "list": 1}, {"vid": video_set_c[16], "img": positive_pictures[16], "valence": "positive", "n": 65, "list": 1}, {"vid": video_set_c[17], "img": positive_pictures[17], "valence": "positive", "n": 66, "list": 1}, {"vid": video_set_c[18], "img": positive_pictures[18], "valence": "positive", "n": 67, "list": 1}, {"vid": video_set_c[19], "img": positive_pictures[19], "valence": "positive", "n": 68, "list": 1}, {"vid": video_set_c[20], "img": positive_pictures[20], "valence": "positive", "n": 69, "list": 1}, {"vid": video_set_c[21], "img": positive_pictures[21], "valence": "positive", "n": 70, "list": 1}, {"vid": video_set_c[22], "img": positive_pictures[22], "valence": "positive", "n": 71, "list": 1}, {"vid": video_set_c[23], "img": positive_pictures[23], "valence": "positive", "n": 72, "list": 1}];
        trial_list_mapping_2 = [{"vid": video_set_a[0], "img": neutral_pictures[0], "valence": "neutral", "n": 1, "list": 2}, {"vid": video_set_a[1], "img": neutral_pictures[1], "valence": "neutral", "n": 2, "list": 2}, {"vid": video_set_a[2], "img": neutral_pictures[2], "valence": "neutral", "n": 3, "list": 2}, {"vid": video_set_a[3], "img": neutral_pictures[3], "valence": "neutral", "n": 4, "list": 2}, {"vid": video_set_a[4], "img": neutral_pictures[4], "valence": "neutral", "n": 5, "list": 2}, {"vid": video_set_a[5], "img": neutral_pictures[5], "valence": "neutral", "n": 6, "list": 2}, {"vid": video_set_a[6], "img": neutral_pictures[6], "valence": "neutral", "n": 7, "list": 2}, {"vid": video_set_a[7], "img": neutral_pictures[7], "valence": "neutral", "n": 8, "list": 2}, {"vid": video_set_a[8], "img": neutral_pictures[8], "valence": "neutral", "n": 9, "list": 2}, {"vid": video_set_a[9], "img": neutral_pictures[9], "valence": "neutral", "n": 10, "list": 2}, {"vid": video_set_a[10], "img": neutral_pictures[10], "valence": "neutral", "n": 11, "list": 2}, {"vid": video_set_a[11], "img": neutral_pictures[11], "valence": "neutral", "n": 12, "list": 2}, {"vid": video_set_a[12], "img": neutral_pictures[12], "valence": "neutral", "n": 13, "list": 2}, {"vid": video_set_a[13], "img": neutral_pictures[13], "valence": "neutral", "n": 14, "list": 2}, {"vid": video_set_a[14], "img": neutral_pictures[14], "valence": "neutral", "n": 15, "list": 2}, {"vid": video_set_a[15], "img": neutral_pictures[15], "valence": "neutral", "n": 16, "list": 2}, {"vid": video_set_a[16], "img": neutral_pictures[16], "valence": "neutral", "n": 17, "list": 2}, {"vid": video_set_a[17], "img": neutral_pictures[17], "valence": "neutral", "n": 18, "list": 2}, {"vid": video_set_a[18], "img": neutral_pictures[18], "valence": "neutral", "n": 19, "list": 2}, {"vid": video_set_a[19], "img": neutral_pictures[19], "valence": "neutral", "n": 20, "list": 2}, {"vid": video_set_a[20], "img": neutral_pictures[20], "valence": "neutral", "n": 21, "list": 2}, {"vid": video_set_a[21], "img": neutral_pictures[21], "valence": "neutral", "n": 22, "list": 2}, {"vid": video_set_a[22], "img": neutral_pictures[22], "valence": "neutral", "n": 23, "list": 2}, {"vid": video_set_a[23], "img": neutral_pictures[23], "valence": "neutral", "n": 24, "list": 2}, {"vid": video_set_b[0], "img": positive_pictures[0], "valence": "positive", "n": 25, "list": 2}, {"vid": video_set_b[1], "img": positive_pictures[1], "valence": "positive", "n": 26, "list": 2}, {"vid": video_set_b[2], "img": positive_pictures[2], "valence": "positive", "n": 27, "list": 2}, {"vid": video_set_b[3], "img": positive_pictures[3], "valence": "positive", "n": 28, "list": 2}, {"vid": video_set_b[4], "img": positive_pictures[4], "valence": "positive", "n": 29, "list": 2}, {"vid": video_set_b[5], "img": positive_pictures[5], "valence": "positive", "n": 30, "list": 2}, {"vid": video_set_b[6], "img": positive_pictures[6], "valence": "positive", "n": 31, "list": 2}, {"vid": video_set_b[7], "img": positive_pictures[7], "valence": "positive", "n": 32, "list": 2}, {"vid": video_set_b[8], "img": positive_pictures[8], "valence": "positive", "n": 33, "list": 2}, {"vid": video_set_b[9], "img": positive_pictures[9], "valence": "positive", "n": 34, "list": 2}, {"vid": video_set_b[10], "img": positive_pictures[10], "valence": "positive", "n": 35, "list": 2}, {"vid": video_set_b[11], "img": positive_pictures[11], "valence": "positive", "n": 36, "list": 2}, {"vid": video_set_b[12], "img": positive_pictures[12], "valence": "positive", "n": 37, "list": 2}, {"vid": video_set_b[13], "img": positive_pictures[13], "valence": "positive", "n": 38, "list": 2}, {"vid": video_set_b[14], "img": positive_pictures[14], "valence": "positive", "n": 39, "list": 2}, {"vid": video_set_b[15], "img": positive_pictures[15], "valence": "positive", "n": 40, "list": 2}, {"vid": video_set_b[16], "img": positive_pictures[16], "valence": "positive", "n": 41, "list": 2}, {"vid": video_set_b[17], "img": positive_pictures[17], "valence": "positive", "n": 42, "list": 2}, {"vid": video_set_b[18], "img": positive_pictures[18], "valence": "positive", "n": 43, "list": 2}, {"vid": video_set_b[19], "img": positive_pictures[19], "valence": "positive", "n": 44, "list": 2}, {"vid": video_set_b[20], "img": positive_pictures[20], "valence": "positive", "n": 45, "list": 2}, {"vid": video_set_b[21], "img": positive_pictures[21], "valence": "positive", "n": 46, "list": 2}, {"vid": video_set_b[22], "img": positive_pictures[22], "valence": "positive", "n": 47, "list": 2}, {"vid": video_set_b[23], "img": positive_pictures[23], "valence": "positive", "n": 48, "list": 2}, {"vid": video_set_c[0], "img": negative_pictures[0], "valence": "negative", "n": 49, "list": 2}, {"vid": video_set_c[1], "img": negative_pictures[1], "valence": "negative", "n": 50, "list": 2}, {"vid": video_set_c[2], "img": negative_pictures[2], "valence": "negative", "n": 51, "list": 2}, {"vid": video_set_c[3], "img": negative_pictures[3], "valence": "negative", "n": 52, "list": 2}, {"vid": video_set_c[4], "img": negative_pictures[4], "valence": "negative", "n": 53, "list": 2}, {"vid": video_set_c[5], "img": negative_pictures[5], "valence": "negative", "n": 54, "list": 2}, {"vid": video_set_c[6], "img": negative_pictures[6], "valence": "negative", "n": 55, "list": 2}, {"vid": video_set_c[7], "img": negative_pictures[7], "valence": "negative", "n": 56, "list": 2}, {"vid": video_set_c[8], "img": negative_pictures[8], "valence": "negative", "n": 57, "list": 2}, {"vid": video_set_c[9], "img": negative_pictures[9], "valence": "negative", "n": 58, "list": 2}, {"vid": video_set_c[10], "img": negative_pictures[10], "valence": "negative", "n": 59, "list": 2}, {"vid": video_set_c[11], "img": negative_pictures[11], "valence": "negative", "n": 60, "list": 2}, {"vid": video_set_c[12], "img": negative_pictures[12], "valence": "negative", "n": 61, "list": 2}, {"vid": video_set_c[13], "img": negative_pictures[13], "valence": "negative", "n": 62, "list": 2}, {"vid": video_set_c[14], "img": negative_pictures[14], "valence": "negative", "n": 63, "list": 2}, {"vid": video_set_c[15], "img": negative_pictures[15], "valence": "negative", "n": 64, "list": 2}, {"vid": video_set_c[16], "img": negative_pictures[16], "valence": "negative", "n": 65, "list": 2}, {"vid": video_set_c[17], "img": negative_pictures[17], "valence": "negative", "n": 66, "list": 2}, {"vid": video_set_c[18], "img": negative_pictures[18], "valence": "negative", "n": 67, "list": 2}, {"vid": video_set_c[19], "img": negative_pictures[19], "valence": "negative", "n": 68, "list": 2}, {"vid": video_set_c[20], "img": negative_pictures[20], "valence": "negative", "n": 69, "list": 2}, {"vid": video_set_c[21], "img": negative_pictures[21], "valence": "negative", "n": 70, "list": 2}, {"vid": video_set_c[22], "img": negative_pictures[22], "valence": "negative", "n": 71, "list": 2}, {"vid": video_set_c[23], "img": negative_pictures[23], "valence": "negative", "n": 72, "list": 2}];
        trial_list_mapping_2_block_1 = [{"vid": video_set_a[0], "img": neutral_pictures[0], "valence": "neutral", "n": 1, "list": 2}, {"vid": video_set_a[1], "img": neutral_pictures[1], "valence": "neutral", "n": 2, "list": 2}, {"vid": video_set_a[2], "img": neutral_pictures[2], "valence": "neutral", "n": 3, "list": 2}, {"vid": video_set_a[3], "img": neutral_pictures[3], "valence": "neutral", "n": 4, "list": 2}, {"vid": video_set_a[4], "img": neutral_pictures[4], "valence": "neutral", "n": 5, "list": 2}, {"vid": video_set_a[5], "img": neutral_pictures[5], "valence": "neutral", "n": 6, "list": 2}, {"vid": video_set_a[6], "img": neutral_pictures[6], "valence": "neutral", "n": 7, "list": 2}, {"vid": video_set_a[7], "img": neutral_pictures[7], "valence": "neutral", "n": 8, "list": 2}, {"vid": video_set_b[0], "img": positive_pictures[0], "valence": "positive", "n": 25, "list": 2}, {"vid": video_set_b[1], "img": positive_pictures[1], "valence": "positive", "n": 26, "list": 2}, {"vid": video_set_b[2], "img": positive_pictures[2], "valence": "positive", "n": 27, "list": 2}, {"vid": video_set_b[3], "img": positive_pictures[3], "valence": "positive", "n": 28, "list": 2}, {"vid": video_set_b[4], "img": positive_pictures[4], "valence": "positive", "n": 29, "list": 2}, {"vid": video_set_b[5], "img": positive_pictures[5], "valence": "positive", "n": 30, "list": 2}, {"vid": video_set_b[6], "img": positive_pictures[6], "valence": "positive", "n": 31, "list": 2}, {"vid": video_set_b[7], "img": positive_pictures[7], "valence": "positive", "n": 32, "list": 2}, {"vid": video_set_c[0], "img": negative_pictures[0], "valence": "negative", "n": 49, "list": 2}, {"vid": video_set_c[1], "img": negative_pictures[1], "valence": "negative", "n": 50, "list": 2}, {"vid": video_set_c[2], "img": negative_pictures[2], "valence": "negative", "n": 51, "list": 2}, {"vid": video_set_c[3], "img": negative_pictures[3], "valence": "negative", "n": 52, "list": 2}, {"vid": video_set_c[4], "img": negative_pictures[4], "valence": "negative", "n": 53, "list": 2}, {"vid": video_set_c[5], "img": negative_pictures[5], "valence": "negative", "n": 54, "list": 2}, {"vid": video_set_c[6], "img": negative_pictures[6], "valence": "negative", "n": 55, "list": 2}, {"vid": video_set_c[7], "img": negative_pictures[7], "valence": "negative", "n": 56, "list": 2}];
        trial_list_mapping_2_block_2 = [{"vid": video_set_a[8], "img": neutral_pictures[8], "valence": "neutral", "n": 9, "list": 2}, {"vid": video_set_a[9], "img": neutral_pictures[9], "valence": "neutral", "n": 10, "list": 2}, {"vid": video_set_a[10], "img": neutral_pictures[10], "valence": "neutral", "n": 11, "list": 2}, {"vid": video_set_a[11], "img": neutral_pictures[11], "valence": "neutral", "n": 12, "list": 2}, {"vid": video_set_a[12], "img": neutral_pictures[12], "valence": "neutral", "n": 13, "list": 2}, {"vid": video_set_a[13], "img": neutral_pictures[13], "valence": "neutral", "n": 14, "list": 2}, {"vid": video_set_a[14], "img": neutral_pictures[14], "valence": "neutral", "n": 15, "list": 2}, {"vid": video_set_a[15], "img": neutral_pictures[15], "valence": "neutral", "n": 16, "list": 2}, {"vid": video_set_b[8], "img": positive_pictures[8], "valence": "positive", "n": 33, "list": 2}, {"vid": video_set_b[9], "img": positive_pictures[9], "valence": "positive", "n": 34, "list": 2}, {"vid": video_set_b[10], "img": positive_pictures[10], "valence": "positive", "n": 35, "list": 2}, {"vid": video_set_b[11], "img": positive_pictures[11], "valence": "positive", "n": 36, "list": 2}, {"vid": video_set_b[12], "img": positive_pictures[12], "valence": "positive", "n": 37, "list": 2}, {"vid": video_set_b[13], "img": positive_pictures[13], "valence": "positive", "n": 38, "list": 2}, {"vid": video_set_b[14], "img": positive_pictures[14], "valence": "positive", "n": 39, "list": 2}, {"vid": video_set_b[15], "img": positive_pictures[15], "valence": "positive", "n": 40, "list": 2}, {"vid": video_set_c[8], "img": negative_pictures[8], "valence": "negative", "n": 57, "list": 2}, {"vid": video_set_c[9], "img": negative_pictures[9], "valence": "negative", "n": 58, "list": 2}, {"vid": video_set_c[10], "img": negative_pictures[10], "valence": "negative", "n": 59, "list": 2}, {"vid": video_set_c[11], "img": negative_pictures[11], "valence": "negative", "n": 60, "list": 2}, {"vid": video_set_c[12], "img": negative_pictures[12], "valence": "negative", "n": 61, "list": 2}, {"vid": video_set_c[13], "img": negative_pictures[13], "valence": "negative", "n": 62, "list": 2}, {"vid": video_set_c[14], "img": negative_pictures[14], "valence": "negative", "n": 63, "list": 2}, {"vid": video_set_c[15], "img": negative_pictures[15], "valence": "negative", "n": 64, "list": 2}];
        trial_list_mapping_2_block_3 = [{"vid": video_set_a[16], "img": neutral_pictures[16], "valence": "neutral", "n": 17, "list": 2}, {"vid": video_set_a[17], "img": neutral_pictures[17], "valence": "neutral", "n": 18, "list": 2}, {"vid": video_set_a[18], "img": neutral_pictures[18], "valence": "neutral", "n": 19, "list": 2}, {"vid": video_set_a[19], "img": neutral_pictures[19], "valence": "neutral", "n": 20, "list": 2}, {"vid": video_set_a[20], "img": neutral_pictures[20], "valence": "neutral", "n": 21, "list": 2}, {"vid": video_set_a[21], "img": neutral_pictures[21], "valence": "neutral", "n": 22, "list": 2}, {"vid": video_set_a[22], "img": neutral_pictures[22], "valence": "neutral", "n": 23, "list": 2}, {"vid": video_set_a[23], "img": neutral_pictures[23], "valence": "neutral", "n": 24, "list": 2}, {"vid": video_set_b[16], "img": positive_pictures[16], "valence": "positive", "n": 41, "list": 2}, {"vid": video_set_b[17], "img": positive_pictures[17], "valence": "positive", "n": 42, "list": 2}, {"vid": video_set_b[18], "img": positive_pictures[18], "valence": "positive", "n": 43, "list": 2}, {"vid": video_set_b[19], "img": positive_pictures[19], "valence": "positive", "n": 44, "list": 2}, {"vid": video_set_b[20], "img": positive_pictures[20], "valence": "positive", "n": 45, "list": 2}, {"vid": video_set_b[21], "img": positive_pictures[21], "valence": "positive", "n": 46, "list": 2}, {"vid": video_set_b[22], "img": positive_pictures[22], "valence": "positive", "n": 47, "list": 2}, {"vid": video_set_b[23], "img": positive_pictures[23], "valence": "positive", "n": 48, "list": 2}, {"vid": video_set_c[16], "img": negative_pictures[16], "valence": "negative", "n": 65, "list": 2}, {"vid": video_set_c[17], "img": negative_pictures[17], "valence": "negative", "n": 66, "list": 2}, {"vid": video_set_c[18], "img": negative_pictures[18], "valence": "negative", "n": 67, "list": 2}, {"vid": video_set_c[19], "img": negative_pictures[19], "valence": "negative", "n": 68, "list": 2}, {"vid": video_set_c[20], "img": negative_pictures[20], "valence": "negative", "n": 69, "list": 2}, {"vid": video_set_c[21], "img": negative_pictures[21], "valence": "negative", "n": 70, "list": 2}, {"vid": video_set_c[22], "img": negative_pictures[22], "valence": "negative", "n": 71, "list": 2}, {"vid": video_set_c[23], "img": negative_pictures[23], "valence": "negative", "n": 72, "list": 2}];
        trial_list_mapping_3 = [{"vid": video_set_a[0], "img": positive_pictures[0], "valence": "positive", "n": 1, "list": 3}, {"vid": video_set_a[1], "img": positive_pictures[1], "valence": "positive", "n": 2, "list": 3}, {"vid": video_set_a[2], "img": positive_pictures[2], "valence": "positive", "n": 3, "list": 3}, {"vid": video_set_a[3], "img": positive_pictures[3], "valence": "positive", "n": 4, "list": 3}, {"vid": video_set_a[4], "img": positive_pictures[4], "valence": "positive", "n": 5, "list": 3}, {"vid": video_set_a[5], "img": positive_pictures[5], "valence": "positive", "n": 6, "list": 3}, {"vid": video_set_a[6], "img": positive_pictures[6], "valence": "positive", "n": 7, "list": 3}, {"vid": video_set_a[7], "img": positive_pictures[7], "valence": "positive", "n": 8, "list": 3}, {"vid": video_set_a[8], "img": positive_pictures[8], "valence": "positive", "n": 9, "list": 3}, {"vid": video_set_a[9], "img": positive_pictures[9], "valence": "positive", "n": 10, "list": 3}, {"vid": video_set_a[10], "img": positive_pictures[10], "valence": "positive", "n": 11, "list": 3}, {"vid": video_set_a[11], "img": positive_pictures[11], "valence": "positive", "n": 12, "list": 3}, {"vid": video_set_a[12], "img": positive_pictures[12], "valence": "positive", "n": 13, "list": 3}, {"vid": video_set_a[13], "img": positive_pictures[13], "valence": "positive", "n": 14, "list": 3}, {"vid": video_set_a[14], "img": positive_pictures[14], "valence": "positive", "n": 15, "list": 3}, {"vid": video_set_a[15], "img": positive_pictures[15], "valence": "positive", "n": 16, "list": 3}, {"vid": video_set_a[16], "img": positive_pictures[16], "valence": "positive", "n": 17, "list": 3}, {"vid": video_set_a[17], "img": positive_pictures[17], "valence": "positive", "n": 18, "list": 3}, {"vid": video_set_a[18], "img": positive_pictures[18], "valence": "positive", "n": 19, "list": 3}, {"vid": video_set_a[19], "img": positive_pictures[19], "valence": "positive", "n": 20, "list": 3}, {"vid": video_set_a[20], "img": positive_pictures[20], "valence": "positive", "n": 21, "list": 3}, {"vid": video_set_a[21], "img": positive_pictures[21], "valence": "positive", "n": 22, "list": 3}, {"vid": video_set_a[22], "img": positive_pictures[22], "valence": "positive", "n": 23, "list": 3}, {"vid": video_set_a[23], "img": positive_pictures[23], "valence": "positive", "n": 24, "list": 3}, {"vid": video_set_b[0], "img": negative_pictures[0], "valence": "negative", "n": 25, "list": 3}, {"vid": video_set_b[1], "img": negative_pictures[1], "valence": "negative", "n": 26, "list": 3}, {"vid": video_set_b[2], "img": negative_pictures[2], "valence": "negative", "n": 27, "list": 3}, {"vid": video_set_b[3], "img": negative_pictures[3], "valence": "negative", "n": 28, "list": 3}, {"vid": video_set_b[4], "img": negative_pictures[4], "valence": "negative", "n": 29, "list": 3}, {"vid": video_set_b[5], "img": negative_pictures[5], "valence": "negative", "n": 30, "list": 3}, {"vid": video_set_b[6], "img": negative_pictures[6], "valence": "negative", "n": 31, "list": 3}, {"vid": video_set_b[7], "img": negative_pictures[7], "valence": "negative", "n": 32, "list": 3}, {"vid": video_set_b[8], "img": negative_pictures[8], "valence": "negative", "n": 33, "list": 3}, {"vid": video_set_b[9], "img": negative_pictures[9], "valence": "negative", "n": 34, "list": 3}, {"vid": video_set_b[10], "img": negative_pictures[10], "valence": "negative", "n": 35, "list": 3}, {"vid": video_set_b[11], "img": negative_pictures[11], "valence": "negative", "n": 36, "list": 3}, {"vid": video_set_b[12], "img": negative_pictures[12], "valence": "negative", "n": 37, "list": 3}, {"vid": video_set_b[13], "img": negative_pictures[13], "valence": "negative", "n": 38, "list": 3}, {"vid": video_set_b[14], "img": negative_pictures[14], "valence": "negative", "n": 39, "list": 3}, {"vid": video_set_b[15], "img": negative_pictures[15], "valence": "negative", "n": 40, "list": 3}, {"vid": video_set_b[16], "img": negative_pictures[16], "valence": "negative", "n": 41, "list": 3}, {"vid": video_set_b[17], "img": negative_pictures[17], "valence": "negative", "n": 42, "list": 3}, {"vid": video_set_b[18], "img": negative_pictures[18], "valence": "negative", "n": 43, "list": 3}, {"vid": video_set_b[19], "img": negative_pictures[19], "valence": "negative", "n": 44, "list": 3}, {"vid": video_set_b[20], "img": negative_pictures[20], "valence": "negative", "n": 45, "list": 3}, {"vid": video_set_b[21], "img": negative_pictures[21], "valence": "negative", "n": 46, "list": 3}, {"vid": video_set_b[22], "img": negative_pictures[22], "valence": "negative", "n": 47, "list": 3}, {"vid": video_set_b[23], "img": negative_pictures[23], "valence": "negative", "n": 48, "list": 3}, {"vid": video_set_c[0], "img": neutral_pictures[0], "valence": "neutral", "n": 49, "list": 3}, {"vid": video_set_c[1], "img": neutral_pictures[1], "valence": "neutral", "n": 50, "list": 3}, {"vid": video_set_c[2], "img": neutral_pictures[2], "valence": "neutral", "n": 51, "list": 3}, {"vid": video_set_c[3], "img": neutral_pictures[3], "valence": "neutral", "n": 52, "list": 3}, {"vid": video_set_c[4], "img": neutral_pictures[4], "valence": "neutral", "n": 53, "list": 3}, {"vid": video_set_c[5], "img": neutral_pictures[5], "valence": "neutral", "n": 54, "list": 3}, {"vid": video_set_c[6], "img": neutral_pictures[6], "valence": "neutral", "n": 55, "list": 3}, {"vid": video_set_c[7], "img": neutral_pictures[7], "valence": "neutral", "n": 56, "list": 3}, {"vid": video_set_c[8], "img": neutral_pictures[8], "valence": "neutral", "n": 57, "list": 3}, {"vid": video_set_c[9], "img": neutral_pictures[9], "valence": "neutral", "n": 58, "list": 3}, {"vid": video_set_c[10], "img": neutral_pictures[10], "valence": "neutral", "n": 59, "list": 3}, {"vid": video_set_c[11], "img": neutral_pictures[11], "valence": "neutral", "n": 60, "list": 3}, {"vid": video_set_c[12], "img": neutral_pictures[12], "valence": "neutral", "n": 61, "list": 3}, {"vid": video_set_c[13], "img": neutral_pictures[13], "valence": "neutral", "n": 62, "list": 3}, {"vid": video_set_c[14], "img": neutral_pictures[14], "valence": "neutral", "n": 63, "list": 3}, {"vid": video_set_c[15], "img": neutral_pictures[15], "valence": "neutral", "n": 64, "list": 3}, {"vid": video_set_c[16], "img": neutral_pictures[16], "valence": "neutral", "n": 65, "list": 3}, {"vid": video_set_c[17], "img": neutral_pictures[17], "valence": "neutral", "n": 66, "list": 3}, {"vid": video_set_c[18], "img": neutral_pictures[18], "valence": "neutral", "n": 67, "list": 3}, {"vid": video_set_c[19], "img": neutral_pictures[19], "valence": "neutral", "n": 68, "list": 3}, {"vid": video_set_c[20], "img": neutral_pictures[20], "valence": "neutral", "n": 69, "list": 3}, {"vid": video_set_c[21], "img": neutral_pictures[21], "valence": "neutral", "n": 70, "list": 3}, {"vid": video_set_c[22], "img": neutral_pictures[22], "valence": "neutral", "n": 71, "list": 3}, {"vid": video_set_c[23], "img": neutral_pictures[23], "valence": "neutral", "n": 72, "list": 3}];
        trial_list_mapping_3_block_1 = [{"vid": video_set_a[0], "img": positive_pictures[0], "valence": "positive", "n": 1, "list": 3}, {"vid": video_set_a[1], "img": positive_pictures[1], "valence": "positive", "n": 2, "list": 3}, {"vid": video_set_a[2], "img": positive_pictures[2], "valence": "positive", "n": 3, "list": 3}, {"vid": video_set_a[3], "img": positive_pictures[3], "valence": "positive", "n": 4, "list": 3}, {"vid": video_set_a[4], "img": positive_pictures[4], "valence": "positive", "n": 5, "list": 3}, {"vid": video_set_a[5], "img": positive_pictures[5], "valence": "positive", "n": 6, "list": 3}, {"vid": video_set_a[6], "img": positive_pictures[6], "valence": "positive", "n": 7, "list": 3}, {"vid": video_set_a[7], "img": positive_pictures[7], "valence": "positive", "n": 8, "list": 3}, {"vid": video_set_b[0], "img": negative_pictures[0], "valence": "negative", "n": 25, "list": 3}, {"vid": video_set_b[1], "img": negative_pictures[1], "valence": "negative", "n": 26, "list": 3}, {"vid": video_set_b[2], "img": negative_pictures[2], "valence": "negative", "n": 27, "list": 3}, {"vid": video_set_b[3], "img": negative_pictures[3], "valence": "negative", "n": 28, "list": 3}, {"vid": video_set_b[4], "img": negative_pictures[4], "valence": "negative", "n": 29, "list": 3}, {"vid": video_set_b[5], "img": negative_pictures[5], "valence": "negative", "n": 30, "list": 3}, {"vid": video_set_b[6], "img": negative_pictures[6], "valence": "negative", "n": 31, "list": 3}, {"vid": video_set_b[7], "img": negative_pictures[7], "valence": "negative", "n": 32, "list": 3}, {"vid": video_set_c[0], "img": neutral_pictures[0], "valence": "neutral", "n": 49, "list": 3}, {"vid": video_set_c[1], "img": neutral_pictures[1], "valence": "neutral", "n": 50, "list": 3}, {"vid": video_set_c[2], "img": neutral_pictures[2], "valence": "neutral", "n": 51, "list": 3}, {"vid": video_set_c[3], "img": neutral_pictures[3], "valence": "neutral", "n": 52, "list": 3}, {"vid": video_set_c[4], "img": neutral_pictures[4], "valence": "neutral", "n": 53, "list": 3}, {"vid": video_set_c[5], "img": neutral_pictures[5], "valence": "neutral", "n": 54, "list": 3}, {"vid": video_set_c[6], "img": neutral_pictures[6], "valence": "neutral", "n": 55, "list": 3}, {"vid": video_set_c[7], "img": neutral_pictures[7], "valence": "neutral", "n": 56, "list": 3}];
        trial_list_mapping_3_block_2 = [{"vid": video_set_a[8], "img": positive_pictures[8], "valence": "positive", "n": 9, "list": 3}, {"vid": video_set_a[9], "img": positive_pictures[9], "valence": "positive", "n": 10, "list": 3}, {"vid": video_set_a[10], "img": positive_pictures[10], "valence": "positive", "n": 11, "list": 3}, {"vid": video_set_a[11], "img": positive_pictures[11], "valence": "positive", "n": 12, "list": 3}, {"vid": video_set_a[12], "img": positive_pictures[12], "valence": "positive", "n": 13, "list": 3}, {"vid": video_set_a[13], "img": positive_pictures[13], "valence": "positive", "n": 14, "list": 3}, {"vid": video_set_a[14], "img": positive_pictures[14], "valence": "positive", "n": 15, "list": 3}, {"vid": video_set_a[15], "img": positive_pictures[15], "valence": "positive", "n": 16, "list": 3}, {"vid": video_set_b[8], "img": negative_pictures[8], "valence": "negative", "n": 33, "list": 3}, {"vid": video_set_b[9], "img": negative_pictures[9], "valence": "negative", "n": 34, "list": 3}, {"vid": video_set_b[10], "img": negative_pictures[10], "valence": "negative", "n": 35, "list": 3}, {"vid": video_set_b[11], "img": negative_pictures[11], "valence": "negative", "n": 36, "list": 3}, {"vid": video_set_b[12], "img": negative_pictures[12], "valence": "negative", "n": 37, "list": 3}, {"vid": video_set_b[13], "img": negative_pictures[13], "valence": "negative", "n": 38, "list": 3}, {"vid": video_set_b[14], "img": negative_pictures[14], "valence": "negative", "n": 39, "list": 3}, {"vid": video_set_b[15], "img": negative_pictures[15], "valence": "negative", "n": 40, "list": 3}, {"vid": video_set_c[8], "img": neutral_pictures[8], "valence": "neutral", "n": 57, "list": 3}, {"vid": video_set_c[9], "img": neutral_pictures[9], "valence": "neutral", "n": 58, "list": 3}, {"vid": video_set_c[10], "img": neutral_pictures[10], "valence": "neutral", "n": 59, "list": 3}, {"vid": video_set_c[11], "img": neutral_pictures[11], "valence": "neutral", "n": 60, "list": 3}, {"vid": video_set_c[12], "img": neutral_pictures[12], "valence": "neutral", "n": 61, "list": 3}, {"vid": video_set_c[13], "img": neutral_pictures[13], "valence": "neutral", "n": 62, "list": 3}, {"vid": video_set_c[14], "img": neutral_pictures[14], "valence": "neutral", "n": 63, "list": 3}, {"vid": video_set_c[15], "img": neutral_pictures[15], "valence": "neutral", "n": 64, "list": 3}];
        trial_list_mapping_3_block_3 = [{"vid": video_set_a[16], "img": positive_pictures[16], "valence": "positive", "n": 17, "list": 3}, {"vid": video_set_a[17], "img": positive_pictures[17], "valence": "positive", "n": 18, "list": 3}, {"vid": video_set_a[18], "img": positive_pictures[18], "valence": "positive", "n": 19, "list": 3}, {"vid": video_set_a[19], "img": positive_pictures[19], "valence": "positive", "n": 20, "list": 3}, {"vid": video_set_a[20], "img": positive_pictures[20], "valence": "positive", "n": 21, "list": 3}, {"vid": video_set_a[21], "img": positive_pictures[21], "valence": "positive", "n": 22, "list": 3}, {"vid": video_set_a[22], "img": positive_pictures[22], "valence": "positive", "n": 23, "list": 3}, {"vid": video_set_a[23], "img": positive_pictures[23], "valence": "positive", "n": 24, "list": 3}, {"vid": video_set_b[16], "img": negative_pictures[16], "valence": "negative", "n": 41, "list": 3}, {"vid": video_set_b[17], "img": negative_pictures[17], "valence": "negative", "n": 42, "list": 3}, {"vid": video_set_b[18], "img": negative_pictures[18], "valence": "negative", "n": 43, "list": 3}, {"vid": video_set_b[19], "img": negative_pictures[19], "valence": "negative", "n": 44, "list": 3}, {"vid": video_set_b[20], "img": negative_pictures[20], "valence": "negative", "n": 45, "list": 3}, {"vid": video_set_b[21], "img": negative_pictures[21], "valence": "negative", "n": 46, "list": 3}, {"vid": video_set_b[22], "img": negative_pictures[22], "valence": "negative", "n": 47, "list": 3}, {"vid": video_set_b[23], "img": negative_pictures[23], "valence": "negative", "n": 48, "list": 3}, {"vid": video_set_c[16], "img": neutral_pictures[16], "valence": "neutral", "n": 65, "list": 3}, {"vid": video_set_c[17], "img": neutral_pictures[17], "valence": "neutral", "n": 66, "list": 3}, {"vid": video_set_c[18], "img": neutral_pictures[18], "valence": "neutral", "n": 67, "list": 3}, {"vid": video_set_c[19], "img": neutral_pictures[19], "valence": "neutral", "n": 68, "list": 3}, {"vid": video_set_c[20], "img": neutral_pictures[20], "valence": "neutral", "n": 69, "list": 3}, {"vid": video_set_c[21], "img": neutral_pictures[21], "valence": "neutral", "n": 70, "list": 3}, {"vid": video_set_c[22], "img": neutral_pictures[22], "valence": "neutral", "n": 71, "list": 3}, {"vid": video_set_c[23], "img": neutral_pictures[23], "valence": "neutral", "n": 72, "list": 3}];
        shuffle(trial_list_mapping_1_block_1)
        shuffle(trial_list_mapping_1_block_2)
        shuffle(trial_list_mapping_1_block_3)
        shuffle(trial_list_mapping_2_block_1)
        shuffle(trial_list_mapping_2_block_2)
        shuffle(trial_list_mapping_2_block_3)
        shuffle(trial_list_mapping_3_block_1)
        shuffle(trial_list_mapping_3_block_2)
        shuffle(trial_list_mapping_3_block_3)

        nTrials = trial_list_mapping_1_block_1.length;

        trialIndex = -1;

        blockIndex = -1;

        let a = [1, 2, 3];
        let i = Math.floor(Math.random() * a.length);
        let myMapping = a[i];

        if (myMapping == 1) {blocks=[trial_list_mapping_1_block_1, trial_list_mapping_1_block_1, trial_list_mapping_1_block_1]}
        if (myMapping == 2) {blocks=[trial_list_mapping_2_block_1, trial_list_mapping_2_block_1, trial_list_mapping_2_block_1]}
        if (myMapping == 3) {blocks=[trial_list_mapping_3_block_1, trial_list_mapping_3_block_1, trial_list_mapping_3_block_1]}
  Routine trial
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    ImageComponent image
      image [set every repeat] = $img
      size = (640,480)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $vid
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 7
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  Routine trial_do
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        trialIndex += 1;
        thisTrial = trialsList[trialIndex];
        // now expose trial fields as variables you can use in Builder
        img = thisTrial.img;
        vid = thisTrial.vid;
      End JS Routine:
        psychoJS.experiment.addData("img", img);
        psychoJS.experiment.addData("vid", vid);
  Routine block_do
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    CodeComponent code_3
      Code Type = JS
      Begin JS Experiment:
        blockIndex = blockIndex+1
        trialsList = blocks[blockIndex]
  PavloviaSurveyRoutine survey
    surveyId = 068536b7-87c2-4c56-b187-2d64c415db74
    surveyJson = surveys/survey_068536b7-87c2-4c56-b187-2d64c415db74 (1).json
    surveyType = id
Flow
  PavloviaSurveyRoutine survey
  Routine pre
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine block_do
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      conditions:
        [OrderedDict([('vid', 'WashingDishes.mp4'), ('img', 'Sp009.jpg'), ('valence', 'negative'), ('n', np.int64(1)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'GrassTrimmingII.mp4'), ('img', 'A127.jpg'), ('valence', 'negative'), ('n', np.int64(2)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'HorseTrail.mp4'), ('img', 'OASIS_I274.jpg'), ('valence', 'negative'), ('n', np.int64(3)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'Spinning.mp4'), ('img', 'Sp075.jpg'), ('valence', 'negative'), ('n', np.int64(4)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'ManBikeRiding.mp4'), ('img', 'A042.jpg'), ('valence', 'negative'), ('n', np.int64(5)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'Hairrollers.mp4'), ('img', 'A123.jpg'), ('valence', 'negative'), ('n', np.int64(6)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'WoodchoppingDog.mp4'), ('img', 'Sp020.jpg'), ('valence', 'negative'), ('n', np.int64(7)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'HarmonicaStanding.mp4'), ('img', 'A011.jpg'), ('valence', 'negative'), ('n', np.int64(8)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'WindowCleaner.mp4'), ('img', 'N092.bmp'), ('valence', 'neutral'), ('n', np.int64(25)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'Harmonica.mp4'), ('img', 'N040.bmp'), ('valence', 'neutral'), ('n', np.int64(26)), ('list', np.int64(1))]),
        OrderedDict([('vid', 'PoolJumpingOutdoors.mp4'), ('img', 'N017.bmp'), ('valence', 'neutral'), ('n', np.int64(27)), ('list', np.int64(1))])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
      Routine trial_do
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
